// Charcoal Fragment Analysis Tool
//
// This text file contains all of the tools necessary to quantify charcoal fragments
// using imageJ and a usb connected digital microscope
//  
// Grant Snitker
// Department of Crop and Soil Sciences
// School of Agricultural and Environmental Sciences
// University of Georgia
// grant.snitker@uga.edu
// 2019

    macro "Open Wand Tool  [c]" {
        setTool("wand"); 
        }

    macro "Open Freehand Trace Tool  [x]" {
        setTool("freehand"); 
        }

    macro "Charcoal Particle Measure Tool [z]" {
        run("Wand Tool...");
         }
     
    var pmCmds = newMenu("Popup Menu",
    newArray("Measure Fragment..."));

    macro "Popup Menu" {
      cmd = getArgument();
      if (cmd=="Measure Fragment...")
           run("Measure");
        // Create Rectangularity Metric
        p = getResult("Perim.");
        w = getResult("Width");
        h = getResult("Height");
        rect = p / ((w + h)*2);
        setResult("Rect", nResults-1, rect);
        updateResults();
       Dialog.create("Morphology");
          items = newArray("Structure", "No Structure");
          Dialog.addRadioButtonGroup("Visible Structure", items, 1, 2, "No Structure");
          items = newArray("Irregular", "Geometric", "Elongated, Ramifications", "Elongated, No Ramifications","N/A");
          Dialog.addRadioButtonGroup("Morphotype", items, 5, 1, "N/A");
          Dialog.setLocation(600,200)
          Dialog.show;
             type1 = Dialog.getRadioButton();
             type2 = Dialog.getRadioButton();
      
             
             if ((type1 == "No Structure") & (type2 == "N/A")) {
             morph = "N/A";
         }
             if ((type1 == "No Structure") & (type2 == "Irregular")) {
             morph = "P";
         }
             if ((type1 == "No Structure") & (type2 == "Geometric")) {
             morph = "C";
         }
             if ((type1 == "No Structure") & (type2 == "Elongated, Ramifications")) {
             morph = "D";
         }
             if ((type1 == "No Structure") & (type2 == "Elongated, No Ramifications")) {
             morph = "F";
         }
             if ((type1 == "Structure") & (type2 == "Geometric")) {
             morph = "S/B";
         }
             if ((type1 == "Structure") & (type2 == "Irregular")) {
             morph = "M";
         }
        setResult("Morph", nResults-1, morph);
        updateResults();
         }
     
    macro "Remove Last Measurement  [d]" {
        IJ.deleteRows(nResults-1,nResults-1);
         }
    
    macro "Open Charcoal Morphotype Flowchart  [s]" {
        open("ImageJ/macros/Char_Tool/Morphotype_flowchart.png");
        setLocation(600,0,600,600); 
         }
     
    macro "No Charcoal Found  [n]" {
        run("Select All");
        run("Measure");
        setResult("Area", nResults, 0);
        IJ.deleteRows(nResults-2,nResults-2);
}
    
    macro "Open Instructions  [h]" {
        Dialog.create("CharTool");
        Dialog.addMessage("Press [C] for magic wand tool");
        Dialog.addMessage("Press [X] for freehand trace tool");
        Dialog.addMessage("Press [D] to delete last measurement");
        Dialog.addMessage("Press [Z] to set edge-finding thresholds");
        Dialog.addMessage("Press [N] if no charcoal is found");
        Dialog.addMessage("Press [H] to see these instructions again.");
        Dialog.addMessage(" ");
        Dialog.addMessage("Right click or press [M] to measure a charcoal fragment");
        Dialog.show;
        }


currentNResults = nResults;
if (nResults == currentNResults) {  // if Analyze Particles did not find any particles
    setResult("Label", nResults, getTitle());
}
