// CharTool: Sedimentary Charcoal Analysis Tool Launcher
//
// This macro launches an intro screen and subsequent quantification and analysis 
// tools for sedimentary charcoal analysis in imageJ
// 
// Grant Snitker
// Department of Crop and Soil Sciences
// School of Agricultural and Environmental Sciences
// University of Georgia
// grant.snitker@uga.edu
// 2019

macro "Launch CharTool Action Tool - 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" {

// Choose Analysis
       macdir = getDirectory("macros");
       Dialog.create("CharTool");
       Dialog.addMessage("Welcome to CharTool: A Suite of Charcoal Qunatification Tools for ImageJ.");       
       Dialog.addMessage("      Please choose a procedure to perform from the options below:\n ");
       items = newArray("Charcoal Fragment Quantification","Sample Color Assessment","Grain Size Evaluation");
       Dialog.addChoice("                        ", items, "Charcoal Fragment Quantification");
       Dialog.show;


       choice1 = Dialog.getChoice();
       if (choice1 == "Charcoal Fragment Quantification") {

// Initiate microscope camera

       waitForUser("CharTool", "Connect to microscope?");
       doCommand("IJ webcam plugin");

       wait(6000);
       waitForUser("CharTool", "Click 'OK' when microscope is connected.");

       Dialog.create("CharTool");
       Dialog.addMessage("Please select the Charcoal Fragment Quantification type below:");
       items = newArray("Without Morphotype Input Option", "With Morphotype Input Option");
       Dialog.addChoice("                        ", items, "Without Morphotype Input Option");
       Dialog.show;

       choice = Dialog.getChoice();
       if (choice == "Without Morphotype Input Option") {
       path1 = "install=" + macdir + "CharTool/Charcoal_fragment_analysis_tool.txt";}
       if (choice == "With Morphotype Input Option") {
       path1 = "install=" + macdir + "CharTool/Charcoal_fragment_analysis_tool_with_morphology.txt";}
       

       Dialog.create("CharTool");
       Dialog.addMessage("Please select from the options below in order to initiate the macro:");
       items = newArray("Install Macros and Set Scale", "Install Macros Only");
       Dialog.addChoice("                        ", items, "Install Macros and Set Measurements");
       Dialog.show;
       
       
       choice1a = Dialog.getChoice();
       if (choice1a == "Install Macros and Set Scale") {
       run("Install...", path1);

       setTool("line");
       waitForUser("Set Scale", "Use Draw Line tool to select a known length\nClick OK when finished");

       run("Set Scale...");
       run("Set Measurements...", "area min perimeter bounding fit shape feret's redirect=None decimal=3");
       
       Dialog.create("CharTool");
       Dialog.addMessage("Add visible scalebar to images?");
       items = newArray("Yes", "No");
       Dialog.addChoice("                  ", items, "Yes");
       Dialog.show;
            
       choice1b = Dialog.getChoice();
       if (choice1b == "Yes") {
       run("Scale Bar...", "width=1000 height=6 font=16 color=Green background=None location=[Lower Left] overlay");
       }
        
       if (choice1b == "No") {};

        Dialog.create("CharTool");
        Dialog.addMessage("Press [C] for magic wand tool");
        Dialog.addMessage("Press [X] for freehand trace tool");
        Dialog.addMessage("Press [D] to delete last measurement");
        Dialog.addMessage("Press [Z] to measure selected charcoal fragment");
        Dialog.addMessage("Press [N] if no charcoal is found");
        Dialog.addMessage("Press [H] to see these instructions again.");
        Dialog.addMessage(" ");
        Dialog.addMessage("Right click or press [M] to measure a charcoal fragment");
        Dialog.show;
        setTool("wand");
        }
       
       if (choice1a == "Install Macros Only") {
       run("Install...",path1);
       
       run("Set Measurements...", "area min perimeter bounding fit shape feret's redirect=None decimal=3");
       

       Dialog.create("CharTool");
       Dialog.addMessage("Add visible scalebar to images?");
       items = newArray("Yes", "No");
       Dialog.addChoice("                  ", items, "Yes");
       Dialog.show;
        
       choice1c = Dialog.getChoice();
       if (choice1c == "Yes") {
       run("Scale Bar...", "width=1000 height=6 font=16 color=Green background=None location=[Lower Left] overlay");
       }
       if (choice1c == "No") {};
        
        Dialog.create("CharTool");
        Dialog.addMessage("Press [C] for magic wand tool");
        Dialog.addMessage("Press [X] for freehand trace tool");
        Dialog.addMessage("Press [D] to delete last measurement");
        Dialog.addMessage("Press [Z] to set edge-finding thresholds");
        Dialog.addMessage("Press [N] if no charcoal is found");
        Dialog.addMessage("Press [H] to see these instructions again.");
        Dialog.addMessage(" ");
        Dialog.addMessage("Right click or press [M] to measure a charcoal fragment");
        Dialog.show;
        setTool("wand");
        }
     }
     

       if (choice1 == "Sample Color Assessment") {
// Initiate microscope camera       
       waitForUser("CharTool", "Connect to microscope?");
       doCommand("IJ webcam plugin");
       run("Set Measurements...", " ");
       wait(5000);
       waitForUser("CharTool", "Click 'OK' when microscope is connected.");
       path2 = "install=" + macdir + "CharTool/Color_assessment_tool.txt";
       run("Install...", path2);
       
        Dialog.create("CharTool");
        Dialog.addMessage("Press [R] to enter sample number and measure mean RBG values");
        Dialog.addMessage("Press [D] to delete last measurement");
        Dialog.addMessage("Press [H] to see these instructions again.");
        Dialog.show;
        setTool("rectangle");
}

      if (choice1 == "Grain Size Evaluation") {
// Initiate microscope camera       
       waitForUser("CharTool", "Connect to microscope?");
       doCommand("IJ webcam plugin");
       run("Set Measurements...", " ");
       wait(5000);
       waitForUser("CharTool", "Click 'OK' when microscope is connected.");
       
       Dialog.create("CharTool");
       Dialog.addMessage("Please select from the options below in order to initiate the macro:");
       items = newArray("Install Macros and Set Scale", "Install Macros Only");
       Dialog.addChoice("                        ", items, "Install Macros and Set Measurements");
       Dialog.show;
       
       choice3a = Dialog.getChoice();
       path3 = "install=" + macdir + "CharTool/Grain_size_evaluation_tool.txt";
       
       if (choice3a == "Install Macros and Set Scale") {
       run("Install...", path3);

       setTool("line");
       waitForUser("Set Scale", "Use Draw Line tool to select a known length\nClick OK when finished");

       run("Set Scale...");
       run("Set Measurements...", "area feret's redirect=None decimal=3");
       
       Dialog.create("CharTool");
       Dialog.addMessage("Add visible scalebar to images?");
       items = newArray("Yes", "No");
       Dialog.addChoice("                  ", items, "Yes");
       Dialog.show;
            
       choice3b = Dialog.getChoice();
       if (choice3b == "Yes") {
       run("Scale Bar...", "width=1000 height=6 font=16 color=Green background=None location=[Lower Left] overlay");
       }
       if (choice3b == "No") {};
       
       Dialog.create("CharTool");
       Dialog.addMessage("Press [S] to enter minimum number of samples required and evaluate particle size");
       Dialog.addMessage("Press [D] to delete last measurement");
       Dialog.addMessage("Press [H] to see these instructions again.");
       Dialog.show;
       setTool("rectangle");
       }
       
       if (choice3a == "Install Macros Only") {
       run("Install...",path3);
       
       run("Set Measurements...", "area feret's redirect=None decimal=3");
       
       Dialog.create("CharTool");
       Dialog.addMessage("Add visible scalebar to images?");
       items = newArray("Yes", "No");
       Dialog.addChoice("                  ", items, "Yes");
       Dialog.show;
        
       choice3c = Dialog.getChoice();
       if (choice3c == "Yes") {
       run("Scale Bar...", "width=1000 height=6 font=16 color=Green background=None location=[Lower Left] overlay");
       }
       
       if (choice3c == "No") {};
       
        Dialog.create("CharTool");
        Dialog.addMessage("Press [S] to enter minimum number of samples required and evaluate particle size");
        Dialog.addMessage("Press [D] to delete last measurement");
        Dialog.addMessage("Press [H] to see these instructions again.");
        Dialog.show;
        setTool("rectangle");
}
}
}